PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'group': '', 'age': '', 'sex': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = dyndist
  logging level = debug
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Routines
  Routine search
    CodeComponent search_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Coordinates of circle
        theta=[0, 45, 90, 135, 180, 225, 270, 315]
        Cx=[4/ScreenHeight*cos(-t*pi/180) for t in theta]
        Cy=[4/ScreenHeight*sin(-t*pi/180) for t in theta]

        def T(rotation,
           size = 64,
           offset = 29,
           bar_width = 6,
           t_color = (1,1,1),
           background_color = (0.8,0.8,0.8)):
        # rotation: 0,1,2,3 (* 90°, counterclockwise rotation)
        # size: size of the patch, default: 63x63 pixel
        # offset: offset of the bar's border. with 28, it's symmetric
        # bar_width: width of bar
        # t_color: RGB value of the T's color. default is white
        # background_color: RGB value of background's color. default is white
           if size - offset < bar_width:
               print('bar width exceeds image dimensions')
               return
           else:
               T = np.zeros((size, size, 3))
               T[:,:,:] = 0.5
               if rotation == 0:
                   T[:7,:,:] = t_color
                   T[:, offset:offset+7,:] = t_color
               if rotation == 1:
                   T[:,:7,:] = t_color
                   T[offset:offset+7,:,:] = t_color
               if rotation == 2:
                   T[-7:,:,:] = t_color
                   T[:, offset:offset+7,:] = t_color
               if rotation == 3:
                   T[:,-7:,:] = t_color
                   T[offset:offset+7,:,:] = t_color
               return T

        # Letter stimuli
        # dist_letters = ['F', 'L']  # (distractor experiment no F, "L,T, almost T" included)
        dist_letters= [T(rotation=2, offset=0), T(rotation=0, offset=15)]
        item_names = ['dist' + str(i) for i in [0, 1, 2, 3, 4, 5, 6, 7]]
        items = [visual.ImageStim(win, units='height', size=0.5/ScreenHeight, color=(1,1,1), colorSpace='rgb', pos=(Cx[i], Cy[i]), name = item_names[i]) for i in [0, 1, 2, 3, 4, 5, 6, 7]]

        #item_names = ['dist' + str(i) for i in [0, 1, 2, 3, 4, 5, 6, 7]]
        #items = [visual.TextStim(win, units='deg',  pos=(Cx[i], Cy[i]), name = item_names[i]) for i in [0, 1, 2, 3, 4, 5, 6, 7]]

        # Target
        # tar_letters = 'T'
        #target = visual.TextStim(win, units='deg',  name = 'Target')
        tar_letters = T(rotation=0, offset=29)
        target = visual.ImageStim(win, units='height',  size=0.5/ScreenHeight, name = 'Target')

        # Distractor
        #dist = visual.TextStim(win, units='deg',  name = 'Distractor')
        dist = visual.ImageStim(win, units='height', size=0.5/ScreenHeight, color=(1,1,1), colorSpace='rgb', name = 'Distractor')

        # Colors
        col1 = [0.2, 0.8, 0.2]
        col2 = [0.2, 0.6, 0.8]
      Begin Routine:
        # Reset active nonsingletons
        Distractors=[1, 1, 1, 1, 1, 1, 1, 1]
        DistLetters=np.random.randint(0,2,8)

        # Target coordinates
        TarCoords=[4/ScreenHeight*cos(-theta[tar_pos]*pi/180), 4/ScreenHeight*sin(-theta[tar_pos]*pi/180)]

        # Target coordinates
        DistCoords=[4/ScreenHeight*cos(-theta[dist_pos]*pi/180), 4/ScreenHeight*sin(-theta[dist_pos]*pi/180)]

        # Remove distractor from target position
        Distractors[tar_pos]=0

        if (dist_pos>-1):
            Distractors[dist_pos]=0

        # Define correct answer
        if (tar_ori==2):
            corr_ans='f'
        else:
            corr_ans='j'

        #if (dist_color==1):
        #    dist_col=col1
        #    tar_col=col2
        #else:
        #    dist_col=col2
        #    tar_col=col1

        # Distractors
        for i in range(0, len(theta)):
            if Distractors[i]==1:
               # items[i].setText(dist_letters[DistLetters[i]])
                items[i].setImage(dist_letters[0])
                items[i].setOri(90+180*np.random.randint(0,2))
                items[i].setAutoDraw(True)
            else:
                items[i].setAutoDraw(False)

        # Target
        #target.setText(tar_letters)
        target.setImage(tar_letters)
        if tar_ori==1:
            target.setOri(90)
        else:
            target.setOri(270)
        target.setPos(TarCoords)
        # target.setColor(tar_col)
        target.setAutoDraw(True)

        # Distractor
        if(dist_pos>-1):
            #dist.setText(dist_letters[dist_letter])
            dist.setImage(dist_letters[1])
            dist.setOri(90+180*dist_ori)
            dist.setPos(DistCoords)
            dist.setAutoDraw(True)
      End Routine:
        # Middle circle
        for i in range(0, len(theta)):
           items[i].setAutoDraw(False)

        # Target
        target.setAutoDraw(False)

        # Distractor
        dist.setAutoDraw(False)
    KeyboardComponent key_resp
      allowedKeys = 'f','j','q'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent fixcross_search
      fillColor = $[1,1,1]
      shape = cross
      size [set every repeat] = (0.5/ScreenHeight, 0.5/ScreenHeight)
      startVal [time (s)] = 0.0
      units = height
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  Routine fixation
    PolygonComponent fixcross
      fillColor = $[1,1,1]
      shape = cross
      size [set every repeat] = (0.5/ScreenHeight, 0.5/ScreenHeight)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr:
            feedback_msg = "Correct"
            feedback_col = "darkgreen"
        else:
            feedback_msg = "Incorrect"
            feedback_col = "darkred"

        if 'q' in key_resp.keys:
            trials.finished=True
    TextComponent feedback_text
      color [set every repeat] = $feedback_col
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_msg
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  Routine block_break
    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Experiment:
        block_trials=60
        num_block=16
        N_trials=block_trials*num_block
        breaktext = visual.TextStim(win, text="Break", units='height', height=0.04)
      Begin Routine:
        if ((trials.thisN+1) % block_trials == 0) and (trials.thisN+1 < N_trials):
            this_block=int((trials.thisN+1)/block_trials)
            breaktext.setText('Block ' + str(this_block) + ' finished\n' + str(num_block-this_block) + ' blocks left\n' + 'Press a key to continue')
            breaktext.setAutoDraw(True)
            break_end=False
        else:
            break_end=True
      End Routine:
        breaktext.setAutoDraw(False)
    KeyboardComponent break_key
      allowedKeys = 'f','j','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = $break_end
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  Routine finish
    TextComponent finish_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The experiment is finished.
        Thank you very much!
    KeyboardComponent finish_key
      allowedKeys = 'f','j','space','q'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent instructions_code
      Code Type = Auto->JS
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      Begin Experiment:
        infoText = ('Visual Search\n'
            'In this experiment, you will see a display with many letters.\n'
            'One of the letters will be a "T", this is the target.\n'
            'The task is to find the target letter and determine whether the base of the "T" is pointing to the left or right.\n'
            'Sometimes there will also be different letters.'
            'This is not the target, please ignore it.'
            'If the target "T" is pointing to the left please press the "f" key (with your left hand); \n'
            'If the target "T" is pointing to the right please press the  "j" key (with your right hand).\n'
            'Please try to respond as quickly and accurately as possible.\n'
            '\n\nWhen you are ready, press space to continue')

        ScreenHeight = 20
    KeyboardComponent instructions_key
      allowedKeys = 'f','j','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $infoText
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  Routine post_q1
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Did you notice any pattern to how
        the position of the distractor,
        i.e. the uniquely colored letter, changed
        from trial to trial, or do you
        think the changes were
        completely random?

        1) The distractor position changed following a regular pattern from trial to trial.
        2) The distractor position changed randomly from trial to trial.
    KeyboardComponent key_pq1
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_q2
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Which of the following changes of distractor position
        from one trial to the next do you think occurred
        the most often?

        1) Distractor moved to opposite end of circle
        2) Distractor moved one step clockwise
        3) Distractor moved one step counterclockwise
        4) Distractor moved two steps clockwise
        5) Distractor moved two steps counterclockwise
        6) Distractor moved three steps clockwise
        7) Distractor moved three steps counterclockwise
    KeyboardComponent key_pq2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"sequences_ori/seq_"+expInfo['group']+".csv"
    loopType = sequential
    nReps = 1
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    Routine fixation
    Routine search
    Routine feedback
    Routine block_break
  LoopTerminator trials
  Routine post_q1
  Routine post_q2
  Routine finish
