PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'group': '', 'screen height (cm)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = dyntargetnodist
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Routines
  Routine search
    CodeComponent search_code
      Code Type = Both
      Begin Experiment:
        # Coordinates of circle
        theta=[0, 45, 90, 135, 180, 225, 270, 315]
        Cx=[4*cos(-t*pi/180) for t in theta]
        Cy=[4*sin(-t*pi/180) for t in theta]

        # Letter stimuli
        dist_letters = ['F', 'L']
        item_names = ['dist' + str(i) for i in [0, 1, 2, 3, 4, 5, 6, 7]]
        items = [visual.TextStim(win, units='deg',  pos=(Cx[i], Cy[i]), name = item_names[i]) for i in [0, 1, 2, 3, 4, 5, 6, 7]]

        # Target
        tar_letters = 'T'
        target = visual.TextStim(win, units='deg',  name = 'Target')
      Begin JS Experiment:
        theta = [0, 45, 90, 135, 180, 225, 270, 315];
        Cx = function () {
            var _pj_a = [], _pj_b = theta;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var t = _pj_b[_pj_c];
                _pj_a.push((4/ScreenHeight * Math.cos((((- t) * Math.PI) / 180))));
            }
            return _pj_a;
        }
        .call(this);
        Cy = function () {
            var _pj_a = [], _pj_b = theta;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var t = _pj_b[_pj_c];
                _pj_a.push((4/ScreenHeight * Math.sin((((- t) * Math.PI) / 180))));
            }
            return _pj_a;
        }
        .call(this);
        dist_letters = ["F", "L"];
        item_names = function () {
            var _pj_a = [], _pj_b = [0, 1, 2, 3, 4, 5, 6, 7];
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(("dist" + i.toString()));
            }
            return _pj_a;
        }
        .call(this);
        items = function () {
            var _pj_a = [], _pj_b = [0, 1, 2, 3, 4, 5, 6, 7];
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.TextStim({"win": psychoJS.window, "units": "height", "height": 0.8/ScreenHeight, "pos": [Cx[i], Cy[i]], "name": item_names[i]}));
            }
            return _pj_a;
        }
        .call(this);
        tar_letters = "T";
        target = new visual.TextStim({"win": psychoJS.window, "units": "height", "height": 0.8/ScreenHeight, "name": "Target"});
      Begin JS Routine:
        Distractors = [1, 1, 1, 1, 1, 1, 1, 1];
        DistLetters = [Math.round(Math.random()), Math.round(Math.random()), Math.round(Math.random()), Math.round(Math.random()), Math.round(Math.random()), Math.round(Math.random()), Math.round(Math.random()), Math.round(Math.random())]
        TarCoords = [(4/ScreenHeight * Math.cos((((- theta[tar_pos]) * Math.PI) / 180))), (4/ScreenHeight * Math.sin((((- theta[tar_pos]) * Math.PI) / 180)))];
        Distractors[tar_pos] = 0;
        if ((tar_ori === 1)) {
            corr_ans = "f";
        } else {
            corr_ans = "j";
        }
        for (var i = 0, _pj_a = theta.length; (i < _pj_a); i += 1) {
            if ((Distractors[i] === 1)) {
                items[i].setText(dist_letters[DistLetters[i]]);
                items[i].setOri((90 + (180 * Math.round(Math.random()))));
                items[i].setAutoDraw(true);
            } else {
                items[i].setAutoDraw(false);
            }
        }
        target.setText(tar_letters);
        if ((tar_ori === 1)) {
            target.setOri(270);
        } else {
            target.setOri(90);
        }
        target.setPos(TarCoords);
        target.setAutoDraw(true);
      Begin Routine:
        # Reset active nonsingletons
        Distractors=[1, 1, 1, 1, 1, 1, 1, 1]
        DistLetters=np.random.randint(0,2,8)

        # Target coordinates
        TarCoords=[4*cos(-theta[tar_pos]*pi/180), 4*sin(-theta[tar_pos]*pi/180)]

        # Remove distractor from target position
        Distractors[tar_pos]=0

        # Define correct answer
        if (tar_ori==1):
            corr_ans='f'
        else:
            corr_ans='j'

        # Distractors
        for i in range(0, len(theta)):
            if Distractors[i]==1:
                items[i].setText(dist_letters[DistLetters[i]])
                items[i].setOri(90+180*np.random.randint(0,2))
                items[i].setAutoDraw(True)
            else:
                items[i].setAutoDraw(False)

        # Target
        target.setText(tar_letters)
        if tar_ori==1:
            target.setOri(90)
        else:
            target.setOri(270)
        target.setPos(TarCoords)
        target.setAutoDraw(True)
      End JS Routine:
        for (var i = 0, _pj_a = theta.length; (i < _pj_a); i += 1) {
            items[i].setAutoDraw(false);
        }
        target.setAutoDraw(false);
      End Routine:
        # Middle circle
        for i in range(0, len(theta)):
           items[i].setAutoDraw(False)

        # Target
        target.setAutoDraw(False)
    KeyboardComponent key_resp
      allowedKeys = 'f','j','q'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    PolygonComponent fixcross_search
      fillColor = $[1,1,1]
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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  Routine fixation
    PolygonComponent fixcross
      fillColor = $[1,1,1]
      shape = cross
      size [set every repeat] = (0.5/ScreenHeight, 0.5/ScreenHeight)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr:
            feedback_msg = "Correct"
            feedback_col = "darkgreen"
        else:
            feedback_msg = "Incorrect"
            feedback_col = "darkred"

        if 'q' in key_resp.keys:
            trials.finished=True
    TextComponent feedback_text
      color [set every repeat] = $feedback_col
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_msg
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  Routine block_break
    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Experiment:
        block_trials=84
        num_block=10
        N_trials=block_trials*num_block
        breaktext = visual.TextStim(win, text="Break", units='height', height=0.04)
      Begin Routine:
        if ((trials.thisN+1) % block_trials == 0) and (trials.thisN+1 < N_trials):
            this_block=int((trials.thisN+1)/block_trials)
            breaktext.setText('Block ' + str(this_block) + ' finished\n' + str(num_block-this_block) + ' blocks left\n' + 'Press a key to continue')
            breaktext.setAutoDraw(True)
            break_end=False
        else:
            break_end=True
      End Routine:
        breaktext.setAutoDraw(False)
    KeyboardComponent break_key
      allowedKeys = 'f','j','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = $break_end
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  Routine finish
    TextComponent finish_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The experiment is finished.
        Thank you very much!
    KeyboardComponent finish_key
      allowedKeys = 'f','j','space','q'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent instructions_code
      Code Type = Auto->JS
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      Begin Experiment:
        infoText = ('Visual Search\n'
            'In this experiment, you will see a display with many letters.\n'
            'One of the letters will be a "T", this is the target.\n'
            'The task is to find the target letter and determine whether the base of the "T" is pointing to the left or right.\n'
            'If it is pointing to the left please press the "f" key (with your left hand); \n'
            'If it is pointing to the right please press the  "j" key (with your right hand).\n'
            'Please try to respond as quickly and accurately as possible.\n'
            '\n\nWhen you are ready, press space to continue')

        ScreenHeight = int(expInfo["screen height (cm)"])
    KeyboardComponent instructions_key
      allowedKeys = 'f','j','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $infoText
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  Routine post_q1
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Did you notice any pattern to how
        the position of the target changed
        from trial to trial, or do you
        think the changes were
        completely random?

        1) The target position changed following a regular pattern from trial to trial.
        2) The target position changed randomly from trial to trial.
    KeyboardComponent key_pq1
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_q2
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Which of the following changes of target position
        from one trial to the next do you think occurred
        the most often?

        1) Target moved to opposite end of circle
        2) Target moved one step clockwise
        3) Target moved one step counterclockwise
        4) Target moved two steps clockwise
        5) Target moved two steps counterclockwise
        6) Target moved three steps clockwise
        7) Target moved three steps counterclockwise
    KeyboardComponent key_pq2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"sequences/seq_"+expInfo['group']+".csv"
    loopType = sequential
    nReps = 1
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    Routine fixation
    Routine search
    Routine feedback
    Routine block_break
  LoopTerminator trials
  Routine post_q1
  Routine post_q2
  Routine finish
